PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = environmental_priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        I agree to participate in the Decision Making Task. I understand the purpose of the study, which is to understand environmental attitudes and decisions. I am aware of the procedures involved, which include disclosing my preferneces. I understand that there are no potential risks or benefits in particpating. I understand that my participation is voluntary and I can withdraw from the study at any time without penalty. I agree to the confidentiality of my data, which will be handled in accordance with ethical guidelines. I have had the opportunity to ask questions and have received satisfactory answers.

        Please press 'SPACE' to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine NEP_scale
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Read the following statements carefully.  And indicate your level of agreeableness or disagreeableness to the statements.
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    TextComponent question
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $scale
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = "Strongly Diasagree", "Disagree", "Unsure", "Agree", "Strongly Agree"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine env_prime
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    TextComponent text_3
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0
      text = Read the following factual statements and indicate your level of familiarity with them.
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $env
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 1
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (0,1)
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  Routine env_decision_inst
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The following task involves you choosing between Option A or Option B. Which product are you most likely to opt for based on the price and environmental impact.
        Press 'left' to choose OPTION A
        Press 'right' to choose OPTION B

        Click 'SPACE' to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine desicion
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    ImageComponent OptionA
      image [set every repeat] = $image1
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent optionB
      image [set every repeat] = $image2
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = scale.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('scale', 'We are approaching the limit of the number of people the Earth can support.')]),
      OrderedDict([('scale', 'Humans have the right to modify the natural environment to suit their needs.')]),
      OrderedDict([('scale', 'When humans interfere with nature it often produces disastrous consequences.')]),
      OrderedDict([('scale', 'Human ingenuity will insure that we do not make the Earth unlivable.')]),
      OrderedDict([('scale', 'Humans are seriously abusing the environment.')]),
      OrderedDict([('scale', 'The Earth has plenty of natural resources if we just learn how to develop them.')]),
      OrderedDict([('scale', 'Plants and animals have as much right as humans to exist.')]),
      OrderedDict([('scale', 'The balance of nature is strong enough to cope with the impacts of modern industrial nations.')]),
      OrderedDict([('scale', 'Despite our special abilities, humans are still subject to the laws of nature.')]),
      OrderedDict([('scale', "The so-called 'ecological crisis' facing humankind has been greatly exaggerated.")]),
      OrderedDict([('scale', 'The Earth is like a spaceship with very limited room and resources.')]),
      OrderedDict([('scale', 'Humans were meant to rule over the rest of nature.')]),
      OrderedDict([('scale', 'The balance of nature is very delicate and easily upset.')]),
      OrderedDict([('scale', 'Humans will eventually learn enough about how nature works to be able to control it.')])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
    Routine NEP_scale
  LoopTerminator trials_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = environ.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('env', 'There have been 223 heat wave events over the Indian subcontinent in the past few decades (1978-1999), causing approximately 5,500 death. India experienced about 24 days of heat waves in different parts of the country in 2024, its longest spell.')]),
      OrderedDict([('env', 'Excessive use of pesticides can lead to soil degradation, water pollution, and harm to beneficial insects and other organisms.')]),
      OrderedDict([('env', 'Pesticide Residue in Food: Pesticide residues in food can pose health risks to consumers, especially when consumed over long periods.')]),
      OrderedDict([('env', 'Large pieces of plastic can entangle and harm marine animals, leading to injuries and death.')]),
      OrderedDict([('env', 'Sea Turtles: Sea turtles often mistake plastic bags for jellyfish, their primary food source. Ingesting plastic can cause intestinal blockages, leading to starvation and death.')]),
      OrderedDict([('env', "Delhi's air quality continues to deteriorate, with recent spikes reaching hazardous levels. The city is frequently engulfed in toxic smog, leading to severe respiratory issues and other health problems for millions of residents.")])]
    Routine env_prime
  LoopTerminator trials_4
  Routine env_decision_inst
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = options.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image1', 'images/A_apple.png'), ('image2', 'images/B_Apple.png')]),
      OrderedDict([('image1', 'images/A_bottle.png'), ('image2', 'images/B_bottle.png')]),
      OrderedDict([('image1', 'images/A_cloth.png'), ('image2', 'images/B_cloth.png')]),
      OrderedDict([('image1', 'images/A_detergent.png'), ('image2', 'images/B_detergent.png')]),
      OrderedDict([('image1', 'images/A_facewash.png'), ('image2', 'images/B_facewash.png')]),
      OrderedDict([('image1', 'images/A_Light_Bulb.png'), ('image2', 'images/B_Light_Bulb.png')]),
      OrderedDict([('image1', 'images/A_shopping.png'), ('image2', 'images/B_shopping.png')]),
      OrderedDict([('image1', 'images/A_toothpaste.png'), ('image2', 'images/B_toothpaste.png')]),
      OrderedDict([('image1', 'images/A_transport.png'), ('image2', 'images/B_transport.png')])]
    Routine desicion
  LoopTerminator trials_5
